PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tutorial 5
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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  Routine test_routine_
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Lenovo/OneDrive/Desktop/Lab psychology/tutorial 5/study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger '},
      {'study_word': 'book'},
      {'study_word': 'cushion '},
      {'study_word': 'piano '},
      {'study_word': 'elephant '},
      {'study_word': 'chair '},
      {'study_word': 'dining table '},
      {'study_word': 'spoon '}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_a_e'},
      {'test': '_i_e_'},
      {'test': 'b_o_'},
      {'test': '_u_h_o_'},
      {'test': 'p_a_o'},
      {'test': '_l_p_a_t'},
      {'test': 'c_a_r'},
      {'test': 't_b_e'},
      {'test': '_p_o_'}]
    Routine test_routine_
  LoopTerminator trials_2
